PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'task': 'Experiment'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = PackagingExperiment
  eyetracker = GazePoint
  gpAddress = 127.0.0.1
  gpPort = 4242
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Routines
  Routine calib_cont
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        timeout = 10
        ave_error = 0.0
        valid_calib_points = 0
      Begin Routine:
        if calibration is not None:
            print(calibration.last)
            ave_error = calibration.last['SUMMARY']['AVE_ERROR']
            valid_calib_points = calibration.last['SUMMARY']['VALID_POINTS']

        calib_query = "Average error is: %f\n\nValid points: %d\n\nRecalibrate (y/n)?" % (ave_error,valid_calib_points)
      End Routine:
        #calib_resp Keyboard component must have set Store: all keys
        if calib_resp is not None and 'n' in calib_resp.keys:
            calib_loop.finished = True
    TextComponent calib_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $calib_query
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    KeyboardComponent calib_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine calib_instr
    TextComponent calib_instr_text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Before we begin the experiment, we must FIRST calibrate the eye tracker.

        Keep your eye on the calibration dot, but don't anticipate it's movement.

        When you are ready to calibrate, press the SPACEBAR.

        *NOTE: It may take up to 7 seconds to move onto the next screen.
    KeyboardComponent calib_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stimulus
    CodeComponent imageSelector
      Code Type = Py
      Begin Experiment:
        #import random
        #Healthy_food = ['stimuli/banana_chips.png', 'stimuli/fruit_cup.png', 'stimuli/clementines.png', 'stimuli/health_bar.png']
        #Unhealthy_food = ['stimuli/nacho_chips.png','stimuli/lays_chips.png', 'stimuli/chocolate_bar.png', 'stimuli/chocolate_cookies.png']
        #Random_image = ['stimuli/distractions/watch.png', 'stimuli/distractions/cart.png', 'stimuli/distractions/scissors.png', 'stimuli/distractions/basketball.png']
        #random.seed()

        ioServer.sendMessageEvent(text='%s' % win.units, category='units')
      Begin Routine:
        #Healthy_index = random.randrange(4)
        #Unhealthy_index = random.randrange(4)
        #Random_index = random.randrange(4)
        #
        #images = [Healthy_food[Healthy_index], Unhealthy_food[Healthy_index], Random_image[Random_index]]
        #random.shuffle(images)
        #
        ioServer.sendMessageEvent(text='%s' % ('beginStimuliFrame'), category='trial')
        #ioServer.sendMessageEvent(text='top: %s, bottomLeft: %s, bottomRight: %s' % (images[2], images[0], images[1]), category='trial')
        #
      End Routine:
        ioServer.sendMessageEvent(text='%s' % ('endStimuliFrame'), category='trial')
    EyetrackerRecordComponent trial_eyetracker
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.25
      syncScreenRefresh = False
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    ImageComponent layout
      image [set every repeat] = $stim
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.
    targetLayout = FIVE_POINTS
    units = from exp settings
  Routine trial_instr
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Now we are ready to begin the actual experiment.

        1. On the following screens, there will be 3 different items displayed.
        2. Focus your gaze on the items that stand out the most to you. There is no right or wrong thing you should be looking at on each slide! Just simply examine whatever grabs your attention the most.
        3. Once the experiment has ended, follow the on-screen instructions.

        Press the SPACEBAR to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine closing
    TextComponent closing_text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation in the Food Packaging Eyetracking Experiment!

        The experiment is now over. Please alert one of the researchers, and be sure to fill out a POST-EXPERIMENT SURVEY at this time.

        We thank you again for your humble participation to help further our eyetracking research!

        Press the SPACEBAR confirming you have read all of this in order to end the experiment.
    KeyboardComponent closing_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine calib_instr
  LoopInitiator calib_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    EyetrackerCalibrationRoutine calibration
    Routine calib_cont
  LoopTerminator calib_loop
  Routine trial_instr
  LoopInitiator stimulus_loop loopType="TrialHandler"
    conditionsFile = stim.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim', './stimuli/layout1.png')]),
      OrderedDict([('stim', './stimuli/layout2.png')]),
      OrderedDict([('stim', './stimuli/layout3.png')]),
      OrderedDict([('stim', './stimuli/layout4.png')]),
      OrderedDict([('stim', './stimuli/layout5.jpg')]),
      OrderedDict([('stim', './stimuli/layout6.jpg')]),
      OrderedDict([('stim', './stimuli/layout7.jpg')]),
      OrderedDict([('stim', './stimuli/layout8.jpg')]),
      OrderedDict([('stim', './stimuli/layout9.jpg')]),
      OrderedDict([('stim', './stimuli/layout10.jpg')]),
      OrderedDict([('stim', './stimuli/layout11.jpg')]),
      OrderedDict([('stim', './stimuli/layout12.jpg')])]
    Routine stimulus
  LoopTerminator stimulus_loop
  Routine closing
